// Takes integrated density measurements at every ROI on every slice and outputs to a csv file
// Works well with Circle Pro tool 
// Install permanently by saving this text file in the ImageJ\macros\toolsets folder
// Click the >> button on the tool bar and then select IntDenCSV 
// Created by Ben 1  

// version 1.01 
//Fixed bug where Integrated density was being used to calculate if camera was being maxed out rather than using the maximum measurement
//Added red filling to maxed out chambers.

macro "IntDenCSV Tool - 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"{
flag = 0;
run("Set Measurements...", "integrated redirect=None decimal=3");
run("Clear Results");
for(j = 1; j <= nSlices; j++){
setSlice(j);
	for (i = 0; i<roiManager("count"); i++) {
		roiManager("select", i)
		fillcheck = Roi.getFillColor;
		RawIntDen= getValue("RawIntDen");
		Max = getValue("Max");
		setResult("Chamber "+(i+1)+" RawIntDen", j-1, RawIntDen);
		if (Max> 65534 &&  fillcheck !="red") { flag = 1;
		run("Properties... ", "position=none group=none stroke=red width=0 fill=red");}}
}

if (flag == 1) {maxMessage();}



path = getDirectory("Select a Directory");
	
getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
time = "";
time = time +year;
if (month<10) {time= time+"0";}
time = time + month+1+"";
if (dayOfMonth<10) {time= time+"0";}
time = time +dayOfMonth+"_";
if (hour<10) {time= time+"0";}
time = time +hour+".";
if (minute<10) {time= time+"0";}
time = time +minute+"_";
saveAs("Results", path+time+"IntDen"+".csv");

Dialog.createNonBlocking("Message");  
Dialog.addMessage("Finished");
	Dialog.show();

function maxMessage() {
Dialog.createNonBlocking("Congratulations");  
			Dialog.addMessage("You maxed out the camera");
			Dialog.show();
}
}