// PET Detective Tool 2.0
// Classic mode will zoom on an ROI and prompt if there is a cell
// Max mode will identify the maximum intensity of each ROI 
// the results are exported as a csv
// Install permanently by saving this text file in the ImageJ\macros\toolsets folder
// Created by Ben 1
macro "PET Detective Tool - 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"
{
types = newArray("Classic", "Go to", "Max");
flag = 1;
Dialog.createNonBlocking("PET Detective 2.0");
	Dialog.addChoice("Mode:", types);
	Dialog.addNumber("Median Filter:", 0);
	Dialog.addNumber("Gaussian Filter:", 0);
	Dialog.show();
	type = Dialog.getChoice();
	m_radius = Dialog.getNumber();
	g_radius = Dialog.getNumber(); 
	

if(type == "Classic") { 
run("Clear Results");
Classic();

function Classic(){
	b = 999;
	for (i = 0; i<roiManager("count"); i++) {
			roiManager("select", i);
			run("To Selection");
			Dialog.createNonBlocking("PET Detective");		
			Dialog.addNumber(i+1+" / "+roiManager("count") , 0);
			Dialog.addMessage("b to go back")
			Dialog.show();
			cell = Dialog.getNumber();
			while(cell == b) {i-=1;
					roiManager("select", i);
					run("To Selection");
					Dialog.createNonBlocking("PET Detective");		
					Dialog.addNumber(i+1+" / "+roiManager("count") , cell);
					Dialog.addMessage("b to go back");
					Dialog.show();
					cell = Dialog.getNumber();}
			setResult("Chamber "+(i+1), "Cell?", cell);}
	updateResults; }
}

if(type == "Go to") { 
run("Clear Results");
Goto();

function Goto() {
	 goto = 1;
	while (flag == 1) {
			Dialog.createNonBlocking( goto+ " / " +roiManager("count"));
			Dialog.addNumber("Go to" , 1);
			Dialog.show();
			goto = Dialog.getNumber();
			if (goto < 1) {
				Error();
				goto = 1;}
			if (goto != goto) {
				flag = 0;}
			roiManager("select",  goto-1);
			run("To Selection");
			Dialog.createNonBlocking( goto+ " / " +roiManager("count"));
			Dialog.addNumber( "Count: " , 0);
			Dialog.show();
			cell = Dialog.getNumber();
			setResult("Chamber "+( goto), "Cell?", cell);}
	updateResults; }
}

if(type == "Max") {
	max_count = 0;
	run("Clear Results");
	run("Select None");
	MaxDet(m_radius, g_radius);
	
function MaxDet(m_radius, g_radius) {
	if (m_radius != 0) {
		run("Median...", "radius=m_radius");}
	if (g_radius != 0) { 
		run("Gaussian Blur...", "sigma=g_radius");}
	for (i = 0; i<roiManager("count"); i++) {
			roiManager("select", i);
			max=getValue("Max");
			print(max);
			if (max > 65534) {
				max_count += 1;}
			setResult("Chamber #", i, i+1);
			setResult("Max Intensity", i, max);
		}
	Dialog.createNonBlocking("Max Count");	
	Dialog.addMessage(max_count);	
	Dialog.addMessage("chambers containing cells");
	Dialog.show();
		updateResults;}
}
function Error () {
					Dialog.createNonBlocking("Error");		
					Dialog.addMessage("bruh");
					Dialog.show();}

saveAs("Results");}