// PET Detective Tool 2.2 updated 8/17/22 (added Oops)
// Classic mode will zoom on an ROI and prompt if there is a cell
// Max mode will identify the maximum intensity of each ROI 
// the results are exported as a csv
// Install permanently by saving this text file in the ImageJ\macros\toolsets folder
// Created by Ben 1
var max_count = 0; 
var oop = 0; 
macro "PET Detective Tool - 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"
{
run("Clear Results");
types = newArray("Classic", "Max");
flag = 1;
Dialog.createNonBlocking("PET Detective 2.2");
	Dialog.addChoice("Mode:", types);
//	Dialog.addNumber("Median Filter:", 0);
//	Dialog.addNumber("Gaussian Filter:", 0);
	Dialog.show();
	type = Dialog.getChoice();
	m_radius = 0;
	g_radius = 0; //these are probably not needed
//	m_radius = Dialog.getNumber();
//	g_radius = Dialog.getNumber(); 
	
// Classic zooms on each ROI and prompts a count
if(type == "Classic") { 
run("Clear Results");
Classic();

function Classic(){
	b = 999;
	for (i = 0; i<roiManager("count"); i++) {
			roiManager("select", i);
			run("To Selection");
			Dialog.createNonBlocking("PET Detective");		
			Dialog.addNumber(i+1+" / "+roiManager("count") , 0);
			Dialog.addMessage("b to go back")
			Dialog.show();
			cell = Dialog.getNumber();
			while(cell == b) {i-=1;
					roiManager("select", i);
					run("To Selection");
					Dialog.createNonBlocking("PET Detective");		
					Dialog.addNumber(i+1+" / "+roiManager("count") , cell);
					Dialog.addMessage("b to go back");
					Dialog.show();
					cell = Dialog.getNumber();}
			setResult("Chamber "+(i+1), "Cell?", cell);}
	updateResults; }
}
//Max detects and reports the maximum value of each chamber
if(type == "Max") {
	run("Clear Results");
	run("Select None");
	MaxDet(m_radius, g_radius);
	}
//Prompt if any cells were missed, then run Oops if needed
choices = newArray("Save and Quit", "Yes");
Dialog.createNonBlocking("PET Detective 2.2");		
Dialog.addMessage("Miss any?");
Dialog.addChoice("Options:", choices);
Dialog.show();
choice = Dialog.getChoice();
	if (choice == "Yes") {
		oop = 1;
		Oops(oop);}
	else {saveAs("Results");}
	
function MaxDet(m_radius, g_radius) { // max value may need to be optimized by exposure time, current is 800ms
	if (m_radius != 0) {
		run("Median...", "radius=m_radius");} //meant to reduce noise, but reducing noise also reduces max value
	if (g_radius != 0) { 
		run("Gaussian Blur...", "sigma=g_radius");}
	for (i = 0; i<roiManager("count"); i++) {
			roiManager("select", i);
			max=getValue("Max");
			setResult("Chamber #", i, i+1);
			setResult("Max Intensity", i, max);
			if (max > 5000) { //the camera maxes out at 2^16 where 0 = black and 65535 = white ... checking top 10% (65535 * .9 = 58981)
				max_count += 1;
				setResult("Cell", i, 1);
				roiManager("select", i);
				run("Properties... ", "position=none group=none stroke=red width=0 fill=none");} //patriotism
			else {setResult("Cell", i, 0);}
		}
	Dialog.createNonBlocking("Max Count");	
	Dialog.addMessage(max_count);	
	Dialog.addMessage("chambers containing cells");
	Dialog.show();
		updateResults;}	
		
function Oops (oop) { //If there are cells that are missed, then you can manually add them to the list
	items = newArray("Add", "Quit");
	while (oop == 1) {
		Dialog.createNonBlocking("PET Detective 2.2");		
		Dialog.addMessage("Click on any ROI that contains a cell and click OK to add this chamber");
		Dialog.addChoice("Add or quit?", items);
		Dialog.show();
		item = Dialog.getChoice();
		if (item == "Add") {
			i = roiManager("index");
			if (i == -1) {Error();}
			else{
				run("Properties... ", "position=none group=none stroke=red width=0 fill=none");
				setResult("Cell", i, 1);
				run("Select None");
				missed += 1;
				max_count += 1;
				} 
						}
		if (item == "Quit") {oop = 0;
			Dialog.createNonBlocking("Updated Count");	
			Dialog.addMessage("New Total:");
			Dialog.addMessage(max_count);	
			Dialog.addMessage("Cells added:");
			Dialog.addMessage(missed);	
			Dialog.show();
			updateResults;
			saveAs("Results");}
	}
	}
function Error () {
					Dialog.createNonBlocking("Error");		
					Dialog.addMessage("bruh");
					Dialog.show();}
}
