// PET Detective Tool
// After using Circle Pro this tool will zoom on chambers and ask if there is a cell
// the results are exported as a csv
// Install permanently by saving this text file in the ImageJ\macros\toolsets folder
// Created by Ben 1
macro "PET Detective Tool - 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"
{
run("Select None");
//Histgoram stats
getHistogram(values, counts, 256);
Array.getStatistics(values, min, max, mean, stdDev);
if (max == 655536) {
Dialog.createNonBlocking("CONGRATULATIONS")
Dialog.addMessage("you maxed out the camera");
Dialog.show();
}

//Pop-up window
types = newArray("Classic", "Threshold");
Dialog.createNonBlocking("PET Detective"); 
	Dialog.addChoice("Mode:", types);
	Dialog.addNumber("Median Filter:", 0);
	Dialog.addNumber("Gaussian Filter:", 0);
	Dialog.addNumber("Top Threshold Percent:", 10);
	//Dialog.addNumber("Lower Threshold Limit:", 371);
	//Dialog.addNumber("Upper Threshold Limit:", 65535);
	Dialog.show();
	type = Dialog.getChoice();
	m_radius = Dialog.getNumber();
	g_radius = Dialog.getNumber();
	thresh_percent = Dialog.getNumber();
	thresh_percent = 1- thresh_percent /100;
//l_thresh = Dialog.getNumber();
//u_thresh = Dialog.getNumber();
	u_thresh = max;
	l_thresh = max * thresh_percent;
	print("u_thresh "+ u_thresh);
	print("l_thresh "+l_thresh);
count = 0;
// Image Processing
run("Duplicate...", "title=[Duplicated Image]");
if (m_radius != 0) {
run("Median...", "radius=m_radius");}
if (g_radius != 0) { 
run("Gaussian Blur...", "sigma=g_radius");}

//Remove Backgroud and threshold 
roiManager("deselect"); 
roiManager("combine");
run("Make Inverse");
run("Clear");
setThreshold(l_thresh, u_thresh);
run("Clear Results");

if(type == "Classic") { 
b = 999;
for (i = 0; i<roiManager("count"); i++) {
		roiManager("select", i);
		run("To Selection");
Dialog.createNonBlocking("PET Detective");		
Dialog.addNumber(i+1+" / "+roiManager("count") , 0);
		Dialog.addMessage("b to go back")
		Dialog.show();
		cell = Dialog.getNumber();
		while(cell == b) {i-=1;
				roiManager("select", i);
				run("To Selection");
				Dialog.createNonBlocking("PET Detective");		
				Dialog.addNumber(i+1+" / "+roiManager("count") , cell);
				Dialog.addMessage("b to go back");
				Dialog.show();
				cell = Dialog.getNumber();}
		setResult("Chamber "+(i+1), "Cell?", cell);}
updateResults;
run("Original Scale"); 
saveAs("Results"); }

if(type == "Threshold") {
for (i = 0; i<roiManager("count"); i++) {
		roiManager("select", i);
		run("To Selection");
		List.setMeasurements("limit");
		area= List.getValue("Area");
			if (area==0) {cell=0;}
				else{cell= 1; 
count += cell;}
				//else{cell=getNumber("Cell?", 1);}
					setResult("Chamber "+(i+1), "Cell?", cell);}
Dialog.createNonBlocking("Count");
Dialog.addMessage(count);
Dialog.show();	
updateResults;
run("Original Scale"); 
//saveAs("Results");}
}
