// PET Detective Tool
// After using Circle Pro this tool will zoom on chambers and ask if there is a cell
// the results are exported as a csv
// Install permanently by saving this text file in the ImageJ\macros\toolsets folder
// Created by Ben 1
macro "PET Detective Tool - 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"
{
types = newArray("Classic", "Threshold");
Dialog.createNonBlocking("PET Detective"); 
	Dialog.addChoice("Mode:", types);
	Dialog.show();
type = Dialog.getChoice();
if(type == "Classic") { 
run("Clear Results");
b = 999;
for (i = 0; i<roiManager("count"); i++) {
		roiManager("select", i);
		run("To Selection");
Dialog.createNonBlocking("PET Detective");		
Dialog.addNumber(i+1+" / "+roiManager("count") , 0);
		Dialog.addMessage("b to go back")
		Dialog.show();
		cell = Dialog.getNumber();
		while(cell == b) {i-=1;
				roiManager("select", i);
				run("To Selection");
				Dialog.createNonBlocking("PET Detective");		
				Dialog.addNumber(i+1+" / "+roiManager("count") , cell);
				Dialog.addMessage("b to go back");
				Dialog.show();
				cell = Dialog.getNumber();}
		setResult("Chamber "+(i+1), "Cell?", cell);}
updateResults; 
saveAs("Results"); }

if(type == "Threshold") {
run("Duplicate...", "duplicate");
roiManager("deselect"); 
roiManager("combine");
run("Make Inverse");
run("Clear");
setThreshold(371, 65535);
run("Clear Results");
for (i = 0; i<roiManager("count"); i++) {
		roiManager("select", i);
		run("To Selection");
		List.setMeasurements("limit");
		area= List.getValue("Area");
			if (area==0) {cell=0;}
				else{cell=getNumber("Cell?", 1);}
					setResult("Chamber "+(i+1), "Cell?", cell);}
updateResults; 
saveAs("Results");}
}
